PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = short term memory experiment
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Welcomeslide
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    TextComponent textwelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Short Term Memory Experiment.

        Press space bar to continue.
    KeyboardComponent keywelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
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    TextComponent textinstruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Aseries of words will appear, each word lasting for a short viewing time.
        Try to remember each word that is presented to you.

        Press space bar to continue.
    KeyboardComponent keyinstruction
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine StudyTrial
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    TextComponent textStudyTrial
      color [set every repeat] = $WordColour
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $WordItem
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  Routine blankscreen
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    TextComponent textblank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine waitscreen
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    TextComponent textwaitscreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine y_n_screen
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    TextComponent texty_n_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Following words are testing your recall. Press either 'Y' for yes or 'N' for no.

        Press space bar to continue.
    KeyboardComponent keyy_n_screen
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine testrials
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    TextComponent texttestrails
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $WordItem
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine endscreen
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Thank you for your participation in this study.
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Flow
  Routine Welcomeslide
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = C:/Users/sspar/OneDrive/word_stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'WordItem': 'anxiety', 'WordColour': 'blue'},
      {'WordItem': 'depression', 'WordColour': 'blue'},
      {'WordItem': 'vexed', 'WordColour': 'blue'},
      {'WordItem': 'excited', 'WordColour': 'yellow'},
      {'WordItem': 'joyous ', 'WordColour': 'yellow'},
      {'WordItem': 'content', 'WordColour': 'yellow'},
      {'WordItem': 'jealous', 'WordColour': None},
      {'WordItem': 'fascinated', 'WordColour': None},
      {'WordItem': 'ashamed', 'WordColour': None},
      {'WordItem': 'aggravated ', 'WordColour': None},
      {'WordItem': 'calm', 'WordColour': None},
      {'WordItem': 'delighted', 'WordColour': None}]
    Routine StudyTrial
    Routine blankscreen
  LoopTerminator trials
  Routine blankscreen
  Routine y_n_screen
  Routine blankscreen
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/sspar/OneDrive/word_stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'WordItem': 'anxiety', 'WordColour': 'blue'},
      {'WordItem': 'depression', 'WordColour': 'blue'},
      {'WordItem': 'vexed', 'WordColour': 'blue'},
      {'WordItem': 'excited', 'WordColour': 'yellow'},
      {'WordItem': 'joyous ', 'WordColour': 'yellow'},
      {'WordItem': 'content', 'WordColour': 'yellow'},
      {'WordItem': 'jealous', 'WordColour': None},
      {'WordItem': 'fascinated', 'WordColour': None},
      {'WordItem': 'ashamed', 'WordColour': None},
      {'WordItem': 'aggravated ', 'WordColour': None},
      {'WordItem': 'calm', 'WordColour': None},
      {'WordItem': 'delighted', 'WordColour': None}]
    Routine testrials
    Routine blankscreen
  LoopTerminator trials_2
  Routine endscreen
